# 1 "/opt/wtopspin/gorka/2D/pp/WT/seq/2D/2D.wt.pulses.pp"
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prosol relations=<wt>


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

; Selective excitation pulse for H -> N:
;sp54:wvm: e400b(cnst51 ppm; TR)
"spoff54 = bf1*(cnst52/1000000) - o1"
"spoal54 = 0"
"cnst54 = 0.57" ; Evolution time quotient in FB-E configuration.
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;   Selective flipback pulse for H -> N:
;sp55:wvm: e400b(cnst51 ppm)
"spoff55 = bf1*(cnst52/1000000) - o1"
"spoal55 = 1"
"cnst55 = 0" ; Evolution time quotient in FB-E configuration.

;   Selective refocussing pulse for H:
;sp56:wvm: reburp(cnst50 ppm)
"spoff56 = bf1*(cnst52/1000000) - o1"
"spoal56 = 0.5"
"cnst56 = 1"

;   Second pair of pulses for use in backtransfer:
; Selective excitation pulse for H -> N:
;sp57:wvm: e400b(cnst51 ppm; TR)
"spoff57= bf1*(cnst52/1000000) - o1"
"spoal57 = 0"
"cnst57 = 0.57"
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;   Selective flipback pulse for H -> N:
;sp58:wvm: e400b(cnst51 ppm)
"spoff58 = bf1*(cnst52/1000000) - o1"
"spoal58 = 1"
"cnst58 = 0"


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; Selective excitation pulse for H -> C:
;sp44:wvm: e400b(cnst41 ppm; TR)
"spoff44 = bf1*(cnst42/1000000) - o1"
"spoal44 = 0"
"cnst44 = 0.57" ; Evolution time quotient in FB-E configuration.

;   Selective flipback pulse for H -> C:
;sp45:wvm: e400b(cnst41 ppm)
"spoff45 = bf1*(cnst42/1000000) - o1"
"spoal45 = 1"
"cnst45 = 0" ; Evolution time quotient in FB-E configuration.

;   Selective refocussing pulse for H:
;sp46:wvm: reburp(cnst40 ppm)
"spoff46 = bf1*(cnst42/1000000) - o1"
"spoal46 = 0.5"
"cnst46 = 0"
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;   Second pair of pulses for use in backtransfer:
; Selective excitation pulse for H -> C:
;sp47:wvm: e400b(cnst41 ppm; TR)
"spoff47= bf1*(cnst42/1000000) - o1"
"spoal47 = 0"
"cnst47 = 0.57"

;   Selective flipback pulse for H -> C:
;sp48:wvm: e400b(cnst41 ppm)
"spoff48 = bf1*(cnst42/1000000) - o1"
"spoal48 = 1"
"cnst48 = 0"

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; WT config after setting cnsts! Otherwise undefined values might be used!

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;cnst0: Correct to phc1=0 by entering cnst0=phc1. Added to last delay.
define pulse proximalDE
"proximalDE = 2*dw*cnst0/360"


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; Adjust d1 for sequence to match requested d1 relaxation time:
"d1 -= 0"   ; Prevents spurious error message from the next line.
"d1 -= d11"


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; ASAP turned off for now:


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; H decoupling with flanking pulses, ignored in case of 1:
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; H or D decoupling with flanking pulses:
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;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [1 ms]
;d13: short delay for setting parameters               [4 us]
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;ns: 1 * n
;ds: >= 16
;td1: number of experiments

;cpd1: decoupling according to sequence defined by cpdprg1, DIPSI2
;cpd2: decoupling according to sequence defined by cpdprg2

;cpd4: decoupling according to sequence defined by cpdprg4, waltz16
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;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;p16: homospoil/gradient pulse                         [650 us]
;p19: gradient pulse 2                                 [100 us]
;p32: gradient pulse in echo
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;p34: distal selection gradient pulse [200 usec]

;d16: delay for homospoil/gradient recovery [200 usec]
;d19: delay for short gradient recovery [80 usec]
;d32: delay for gradient recovery [20 usec]
;d34: distal recovery after selection gradient [20 usec]

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;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p21 : f3 channel - 90 degree high power pulse
;p22 : f3 channel - 180 degree high power pulse

;pl1: power for 1H  pulses
;pl2: power for 13C pulses
;pl3: power for 15N pulses
;pl4: power for 2H pulses

;gpz0: prefocussing gradient.
;gpnam0: SMSQ10.100
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define delay dH_inversion
define delay dH_inversion_raw

define delay dHC_inversion
define delay dHC_inversion_raw

define pulse pH_excitation
define pulse pHC_excitation
define pulse pH_exc_UR
define pulse pHC_exc_UR
define pulse pH_refocussing
define pulse pHC_refocussing
define pulse pH_inversion
define pulse pHC_inversion
define pulse eH_excitation
define pulse eHC_excitation
define pulse eH_refocussing
define pulse eHC_refocussing
define pulse eH_exc_UR
define pulse eHC_exc_UR
define pulse eH_fb_UR
define pulse eHC_fb_UR
define pulse eH_WATERGATE
define pulse eHC_WATERGATE
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define pulse pH2O_exc_Z


;cnst40: excitation width of HC refocussing pulses [ppm].
;cnst41: excitation width of HC excitation/flipback pulses [ppm].
;cnst42: chemical shift of HC protons [ppm].
;cnst43: rotation angle for HC pc9 pulse [0-90 deg]
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;cnst50: excitation width of HN/HCaro refocussing pulses [ppm].
;cnst51: excitation width of HN/HCaro excitation/flipback pulses [ppm].
;cnst52: chemical shift of HN/HCaro protons [ppm].
;cnst53: rotation angle for HN/HCaro pc9 pulse [0-90 deg]

"d42 = cnst40*0.05u + cnst41*0.05u + cnst42*0.05u + cnst43*0.05u"
"d52 = cnst50*0.05u + cnst51*0.05u + cnst52*0.05u + cnst53*0.05u"

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; H pulses act on > 4.7 and HC pulses on 4.7 > with H2O unaffected.

define pulse pH2O_excitation
define pulse pH2O_flipback

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    "pH2O_excitation = 0u"
    "pH2O_flipback = 0u"
    "pH2O_exc_Z = 0u"
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    "p11 = 0u"


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    "d46 = 0u"
    "d56 = 0u"
    "pHC_excitation = p44"
    "pHC_exc_UR = p47"


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    "pHC_inversion = p46"
    "d46 = p46*cnst46/2"
    "eHC_refocussing = p46*cnst46 + d46"
    "eHC_excitation = p44*cnst44"
    "eHC_exc_UR = p47*cnst47"
    "eHC_fb_UR = p47*cnst48"
    "pHC_refocussing = p46 + d46"
    "pH_excitation = p54"
    "pH_exc_UR = p57"


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    "pH_inversion = p56"
    "d56 = 0u"
    "eH_excitation = p54*cnst54"
    "eH_refocussing = p56*cnst56"

    "eH_exc_UR = p57*cnst57"

    "eH_fb_UR = p57*cnst58"
    "pH_refocussing = p56"
    "dH_inversion = p56+d56"
    "dH_inversion_raw = p56"
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    "spoff44 = bf1*(cnst42/1000000) - o1"
    "spoff45 = bf1*(cnst42/1000000) - o1"
    "spoff46 = bf1*(cnst42/1000000) - o1"
    "spoff47 = bf1*(cnst42/1000000) - o1"
    "spoff48 = bf1*(cnst42/1000000) - o1"
    "spoal44 = 0"
    "spoal45 = 1"
    "spoal46 = 0.5"
    "spoal47 = 0"
    "spoal48 = 1"

    "spoff54 = bf1*(cnst52/1000000) - o1"
    "spoff55 = bf1*(cnst52/1000000) - o1"
    "spoff56 = bf1*(cnst52/1000000) - o1"
    "spoff57 = bf1*(cnst52/1000000) - o1"
    "spoff58 = bf1*(cnst52/1000000) - o1"
    "spoal54 = 0"
    "spoal55 = 1"
    "spoal56 = 0.5"
    "spoal57 = 0"
    "spoal58 = 1"

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    "eH_WATERGATE = eH_refocussing"
    "eHC_WATERGATE = eHC_refocussing"

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define delay dC_inversion
define delay dC_universal
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define pulse eC_excitation
define pulse eC_flipback
define pulse eC_universal

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    "dC_inversion = p41"
    "dC_universal = p3"
    "eC_excitation = p3*2/PI"
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define delay dN_inversion
define delay dN_universal
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     "dN_universal = p21"
     "dN_inversion = p22"
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; 1-10 free
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;gp31 reserved for rdgradient

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define list<gradient> EA2=<EA2>

;gpnam0: SMSQ10.100
;gpnam1: SMSQ10.100

;gpnam28: SMSQ10.100
;gpnam29: SMSQ10.100
;gpnam30: SMSQ10.100
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;gpz0: Prefocussing gradient.
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; Manual set decoupling power:

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  "plw16 = plw3*(p21*p21)/(pcpd3*pcpd3)"  ; Recalculate power for classic N decoupling.


"plw12 = plw2*(p3*p3)/(pcpd2*pcpd2)"  ; Recalculate power for classic C decoupling.
"p51 = 10*p1"
"p52 = 10*p3"
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"p61 = 10*p1"
"p62 = 10*p3"
"p63 = 10*p21"

"spw51 = plw1"
"spw52 = plw2"

"spw61 = plw1"
"spw62 = plw2"
"spw63 = plw3"
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define pulse pGRAD
"pGRAD = p16"
define delay dGRAD
"dGRAD = d16"
define pulse pGProximalL
"pGProximalL = p17"
define delay dGProximalL
"dGProximalL = d17"
define pulse pGProximalS
"pGProximalS = p18"
define delay dGProximalS
"dGProximalS = d18"
define pulse pGDistalL
"pGDistalL = p19"
define delay dGDistalL
"dGDistalL = d19"
define pulse pGDistalS
"pGDistalS = p20"
define delay dGDistalS
"dGDistalS = d20"
;p16: crusher/prefocussing gradient pulse.
;p17: Proximal long gradient pulse.
;p18: Proximal short gradient pulse.
;p19: Distal long gradient pulse.
;p20: Distal short gradient pulse.


;d16: Crusher/prefocussing gradient delay.
;d17: Proximal long gradient delay.
;d18: Proximal short gradient delay.
;d19: Distal long gradient delay.
;d20: Distal short gradient delay.
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; Water flipback and flipdown pulses:

;p48: H2O flipback pulse
;p49: H2O flipdown pulse

;sp48: H2O flipback pulse
;sp49: H2O flipdown pulse
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;p50:
;p51: f1 channel, broadband refocussing pulse [BURBOP 20-200-900]
;p52: f2 channel, broadband refocussing pulse [BURBOP 20-200-900]

;p61: f1 channel, broadband refocussing pulse [G5]
;p62: f2 channel, broadband refocussing pulse [G5]
;p63: f3 channel, broadband refocussing pulse [G5]

;sp50:
;sp51: f1 channel, broadband refocussing pulse [BURBOP 20-200-900]
;sp52: f2 channel, broadband refocussing pulse [BURBOP 20-200-900]
;sp53: f3 channel, broadband refocussing pulse [BURBOP 20-200-900]
;sp61: f1 channel, broadband refocussing pulse [G5]
;sp62: f2 channel, broadband refocussing pulse [G5]
;sp63: f3 channel, broadband refocussing pulse [G5]
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; Descriptions of parameters read from prosol:

;p1: f1 channel -  90 degree high power pulse.
;p2: f1 channel - 180 degree high power pulse.
;p3: f2 channel -  90 degree high power pulse.
;p4: f2 channel - 180 degree high power pulse.
;p9: f2 channel - TOCSY mixing 90 degree pulselength.
;p11: f1 channel -  90 degree shaped pulse.
;p13: f2 channel -  90 Q5 Cali/CO.
;p14: f2 channel - 180 Q3 Cali/CO.

;p16: homospoil/gradient pulse  [1 ms]
;p17: f1 channel - trim pulse [2.5 ms]
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;p21: f3 channel -  90 degree high power pulse.
;p22: f3 channel - 180 degree high power pulse.

;p32
;p34
;p36
;p37
;p38
;p53
;p54
;p58
;p59
;plw37-63

;p53: f4 channel - 90 degree high power pulse.
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;pcpd1: f1 channel - 90 degree pulse for decoupling sequence.
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence.
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence.
;pcpd4: f4 channel - 90 degree pulse for decoupling sequence.
;pcpd5: f5 channel - 90 degree pulse for decoupling sequence.


;pl1: power for 1H  pulses.
;pl2: power for 13C pulses.
;pl3: power for 15N pulses.
;pl4: power for 2H pulses.
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;pl10: f1 channel - trim pulse, 25 us equivalent maximum!
;pl12: f2 channel - power level for CPD/BB decoupling.
;pl16: f3 channel - power level for CPD/BB decoupling.
;pl32: f1 channel - power level for H presat, 80 us equivalent maximum!

;cpd1: decoupling according to sequence defined by cpdprg1.
;cpd2: decoupling according to sequence defined by cpdprg2.
;cpd3: decoupling according to sequence defined by cpdprg3.
;cpd4: decoupling according to sequence defined by cpdprg4.
;cpd5: decoupling according to sequence defined by cpdprg5.

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; Shaped pulses: sp1-sp42 set by Prosol.

;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance).
;sp2: f2 channel, 90 Q5 Cali/CO on resonance.
;sp3: f2 channel, 180 Q3 Cali/CO on resonance.
;sp5: f2 channel, 180 Q3 Cali off resonance.
;sp6: f2 channel, 90 Q5 Cali/CO off resonance time reversed.
;sp7: f2 channel, 180 Q3 CO with off resonance.
;sp8: f2 channel, 90 Q5 Cali/CO on resonance time reversed.
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;d1: relaxation delay    [1.2 s]
;d0: effective relaxation delay
;d3: delay for RD gradient recovery [2 us]
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;d9: C TOCSY mixing time [20 ms]
;d11: delay for disk I/O    [30 ms]
;d13: short delay  [4 usec]
;d16: delay for homospoil/gradient recovery [200 us]

;d21: time for H -> N evolution [5.4 ms]
;d22: time for N -> H evolution [5.4 ms]
;d23: time for simultaneous H -> N and N -> H evolution [5.4 ms]
;d24: time for H -> C evolution [3.5 ms]
;d25: time for C -> H(1/2/3) evolution, prefers CH, 1/(3JCH) [2.6 ms]
;d26: time for C -> H(1/2/3) evolution, prefers CH2, 1/(4JCH) [1.8 ms]
;d27: time for C -> H(1/2/3) evolution, prefers CH3, 1/(5JCH) [1.4 ms]
;d28: time for H -> Caro evolution [3.5 ms]
;d29: time for Caro -> H evolution [3.5 ms]
;d30: time for N -> CO evolution [28 ms]
;d31: time for N -> CA evolution [28 ms]
;d32: time for CO -> CA evolution [9.1 ms]
;d33: time for CA -> CO evolution compensated for relaxation [6.3 ms to 9.1 ms]
;d34: time for CA -> CO evolution in constant time [9.1 ms]
;d35: 2*time for CA -> CACB evolution or CA constant time evolution [28.6 ms]
;d36: time for NCA -> CAN' evolution [28.6 ms or 54 ms]
;d37: time for CA -> CACB and CB -> CBCA partial evolution 1/(4JCACB) [7.1 ms]
;d38: time for CO -> N evolution [28 ms]
;d39: time for N -> CO and N -> CA evolution [28 ms]
;d40: time for N -> NCAiCAi-1 evolution [50 ms]
;d41: time for Hm -> Cm evolution [4 ms]

;d46: symmetrizing delay for HC_refocussing.
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;d50: time for C(ali)C(ali) FLOPSY16 mixing [20 ms]
;d51: time for C(aro)C(aro) FLOPSY16 mixing [20 ms]

;d56: symmetrizing delay for H_refocussing.
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
"in1 = inf1"

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    "d1 += 0s*(cnst50 + cnst51 + cnst52)"


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; Use gradients by default:


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define delay timeHX
define delay timeXH
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  "timeHX = d21"
  "timeXH = d22"


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define delay dX_inversion
define delay dX_universal

define pulse eHX_refocussing
define pulse eHX_excitation
define pulse eHX_exc_UR
define pulse eHX_fb_UR
define pulse pHX_inversion
define pulse pHX_exc_UR

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    "dX_inversion = dN_inversion"
    "dX_universal = dN_universal"
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define pulse pY_inversion


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    "pY_inversion = dC_inversion"


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

    "pHX_inversion = pH_inversion"
    "pHX_exc_UR = pH_exc_UR"
    "eHX_excitation = eH_excitation"
    "eHX_refocussing = eH_refocussing"
    "eHX_exc_UR = eH_exc_UR"
    "eHX_fb_UR = eH_fb_UR"
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;cnst44: effective evolution multiplier for HC_excitation.
;cnst46: effective evolution multiplier for HC_refocussing.
;cnst47: effective evolution multiplier for HC_UR_exc.
;cnst48: effective evolution multiplier for HC_UR_fb.

;cnst54: effective evolution multiplier for C_excitation.
;cnst56: effective evolution multiplier for C_refocussing.
;cnst57: effective evolution multiplier for C_UR_exc.
;cnst58: effective evolution multiplier for C_UR_fb.
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

; Set up chemical shift evolution times:
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define delay TProximal
"TProximal = 0"

define delay TproximalPre
define delay TproximalPost
define delay dHX  ; H echo.
define delay dXH_SE1  ; First echo of the sensitivity enhanced transfer.
define delay dXH_SE2  ; Second echo of the sensitivity enhanced transfer.
define delay ECHOTIME1  ; Delay before the last H refocussing pulse.
define delay ECHOTIME2  ; Delay after the last H refocussing pulse.

; Nietlispach's TROSY requires an extra flipback pulse to bring H2O back to z:
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; For now assumes pulses exciting H to the left of H2O:
"dHX = timeHX/2 - pGProximalS - dGProximalS - eHX_refocussing/2 - eHX_excitation"

"dXH_SE1 = timeXH/2 - pGProximalS - dGProximalS - eHX_refocussing/2 - eHX_fb_UR"
"dXH_SE2 = timeXH/2 - pGProximalS - dGProximalS - eHX_refocussing/2 - eHX_exc_UR"

; Compensate X SQ echo if H pulse in the ending pair is longer than the X pulse:
"TproximalPre = larger((pHX_exc_UR - dX_universal), 0)"
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    "TproximalPre += pH2O_flipback"


; Compensate for inversion pulses during X SQ evolution:
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    "TproximalPost = pY_inversion"


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; Mutually compensate delays around the N refocussing pulse:
"if (TproximalPre > TproximalPost) {TproximalPre -= TproximalPost; TproximalPost = 0;}"
"if (TproximalPost > TproximalPre) {TproximalPost -= TproximalPre; TproximalPre = 0;}"

; Delays in the gradient selection echo on H:
"ECHOTIME1 = de"
"ECHOTIME2 = eHX_fb_UR"

; Mutually compensate delays in the last echo of a sensitivity enhanced sequence:
"if (ECHOTIME1 >= ECHOTIME2) {ECHOTIME1 -= ECHOTIME2; ECHOTIME2 = 0;}"
"if (ECHOTIME2 > ECHOTIME1) {ECHOTIME2 -= ECHOTIME1; ECHOTIME1 = 0;}"
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"acqt0 = 0"
baseopt_echo
; *****************************************************************************
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; dimension 2D; AQ_mode  (F1) Echo-Antiecho
define delay MCWRK
define delay MCREST
define delay TProximalorig
"TProximalorig=TProximal"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 2)"
"MCREST = d11 - d11"
"MCWRK = 0.076923*d11"

    dccorr
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1 ze
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LBLAV, MCWRK
      "TProximal=TProximalorig + t1loop * in1 "
      "phval13 = (ph1loop % 2) * 180"
      MCWRK ip13 + phval13
      "phval11 = (t1loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t1loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph1loop * 1"
      MCWRK setgrad EA
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2 MCWRK  * 6 do:f2  do:f3
LBLF1, MCWRK  * 6
LBLST1, MCWRK 
  MCREST
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; TODO: 
; Calculate recycling delay including everything outside pulses and acquisition time.

; Reset relaxation delay:
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    "d0 = d1"   ; Reset relaxation delay.


"d0 -= d11 + 4u"    ; Account for d11 file write delay and 4u delay for setnmr3|0 setnmr0|34|32|33 ctrlgrad 0.
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    (p22 ph0 pl3):f3
    "d0 -= dX_inversion"


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  d0    ; Relaxation delay.

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  4u do:f1 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
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
; Extra gradient delay:  

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; Include in acq.incl

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

; Hz -> HzNz:
  (p54:sp54 ph0):f1
  pGProximalS:gp11 dGProximalS
  dHX
  (center (p56:sp56 ph1 d56):f1 (p22 ph0 pl3):f3)
  dHX
  pGProximalS:gp11 dGProximalS
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      (p55:sp55 ph3):f1 ; CHalpha or NHbeta.


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   ; H2O to z by default.


  p16:gp14 d16
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; HzNz -> HzNy + HzNx with N evolution (T1):
  (p21 ph11 pl3):f3
  
  TProximal*0.5
  

    (p41:sp41 ph0):f2

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  p16:gp17*EA
  d16
  
  TProximal*0.5
  
  TproximalPre
  (p22 ph12 pl3):f3
  p16:gp18*EA    ; Optional.
  d16
   ; Compensate for the minimum time of two RDGRADs
  TproximalPost


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;   COS-INEPT/Nietlispach 1:
    (ralign ( p58:sp58 ph0):f1 (p21 ph13 pl3):f3)
    pGProximalS:gp12 dGProximalS
    dXH_SE1
    (center (p56:sp56 ph0 d56):f1 (p22 ph0 pl3):f3)
    dXH_SE1
    pGProximalS:gp12 dGProximalS
    (lalign (p57:sp57 ph1):f1 (p21 ph0 pl3):f3)
    pGProximalS:gp13 dGProximalS
    dXH_SE2
    (center (p56:sp56 ph0 d56):f1 (p22 ph0 pl3):f3)
    dXH_SE2
    pGProximalS:gp13 dGProximalS

      (ralign (p58:sp58 ph1):f1 (p21 ph3 + ph14 pl3):f3)

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  pGRAD:gp19
  dGRAD
  ECHOTIME1
  (p56:sp56 ph0 d56):f1
  ECHOTIME2
  pGRAD:gp20
  dGRAD  setnmr3^0 setnmr0^34^32^33 ctrlgrad 7

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; *****************************************************************************
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    go=2 ph31 
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  MCWRK  wr #0 if #0 zd 

  "ph1loop+=1"
      "TProximal=TProximalorig + t1loop * in1 "
      "phval13 = (ph1loop % 2) * 180"
      MCWRK ip13 + phval13
      "phval11 = (t1loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t1loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph1loop * 1"
      MCWRK setgrad EA
  lo to LBLF1 times 2
  MCWRK 

  "t1loop+=1"
      "TProximal=TProximalorig + t1loop * in1 "
      "phval13 = (ph1loop % 2) * 180"
      MCWRK ip13 + phval13
      "phval11 = (t1loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t1loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph1loop * 1"
      MCWRK setgrad EA
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t1loop=0"
  "ph1loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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exit

ph0 = 0
ph1 = 1
ph2 = 2
ph3 = 3
ph30 = 0
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
; ph14 - last H pulse of the TRANSFER block determines selection of X spin state:

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    ph14 = 0


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; E/A selecting phase:

    ph13 = 0

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; Phase of first X pulse in N evolution (for TPPI in T1):


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      ph11 = 3 1  ; X excitation.


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;# ifndef DISTAL_PHASES_4
;    ph12 = 0 0 2 2  ; X refocussing.
;# elif !defined(DISTAL_PHASES_8)
;    ph12 = 0 0 0 0 2 2 2 2 ; X refocussing.
;# else
    ph12 = 0 0; X refocussing.
;# endif


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;gpnam11: SMSQ10.100
;gpnam12: SMSQ10.100
;gpnam13: SMSQ10.100
;gpnam14: SMSQ10.100
;gpnam17: SMSQ10.100
;gpnam18: SMSQ10.100
;gpnam19: SMSQ10.100
;gpnam20: SMSQ10.100

;gpz11: Gradient in Hz -> HzXz INEPT: 1%.

;gpz12: Gradient in first COS-INEPT echo: 5%.
;gpz13: Gradient in second COS-INEPT echo: 2%.
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;gpz14: Gradient after Hz -> HzXz INEPT: 3%.

;gpz17: First coherence selection gradient (on N/C): 80%.
;gpz18: Second coherence selection gradient (on N/C): 0%.

;gpz19: Third coherence selection gradient (on H): 1%.
;gpz20: Forth coherence selection gradient (on H): 9.1%.
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
; Receiver phase:
ph31 = {0 2}
