# 1 "/opt/wtopspin/gorka/2D/pp/WT/seq/backbone/HNCO.wt.pp"
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prosol relations=<wt>


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
"in1 = inf1"
"in2 = inf2"
define delay T1
"T1 = 0"
define delay TPmax
"TPmax = max(in2*(td2/2 - 1), 0)"

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;cnst0: Correct to phc1=0 by entering cnst0=phc1. Added to last delay.
define delay WT_de


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    "WT_de = de - 2*dw*cnst0/360"


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
; Adjust d1 for sequence to match requested d1 relaxation time:
"d1 -= 0"   ; Prevents spurious error message from the next line.
"d1 -= d11"

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; ASAP turned off for now:


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
; H decoupling with flanking pulses, ignored in case of TROSY:
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; H or D decoupling with flanking pulses:
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;ns: 1 * n
;ds: >= 16
;td1: number of experiments

;cpd1: decoupling according to sequence defined by cpdprg1, DIPSI2
;cpd2: decoupling according to sequence defined by cpdprg2

;cpd4: decoupling according to sequence defined by cpdprg4, waltz16
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;pcpd2: f2 channel - 90 degree pulse for decoupling sequence

;gpz0: prefocussing gradient.
;gpnam0: SMSQ10.100

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define delay dH_inversion
define delay dH_inversion_raw
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define delay dHC_inversion
define delay dHC_inversion_raw

define pulse pH_excitation
define pulse pHC_excitation
define pulse pH_exc_UR
define pulse pHC_exc_UR
define pulse pH_refocussing
define pulse pHC_refocussing
define pulse pH_inversion
define pulse pHC_inversion
define pulse eH_excitation
define pulse eHC_excitation
define pulse eH_refocussing
define pulse eHC_refocussing
define pulse eH_exc_UR
define pulse eHC_exc_UR
define pulse eH_fb_UR
define pulse eHC_fb_UR
define pulse eH_WATERGATE
define pulse eHC_WATERGATE

define pulse pH2O_exc_Z
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
; H pulses act on > 4.7 and HC pulses on 4.7 > with H2O unaffected.

define pulse pH2O_excitation
define pulse pH2O_flipback
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    "pH2O_excitation = p11"
    "pH2O_flipback = p11"
    "pH2O_exc_Z = 0"
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    "pH_inversion = p2"
    "eHC_refocussing = 0"

    "pHC_exc_UR = p1"
    "d46 = 0"
    "eH_excitation = p1*2/PI"
    "eH_refocussing = 0"
    "eH_exc_UR = p1*2/PI"
    "eH_fb_UR = p1*2/PI"
    "pH_refocussing = p2"
    "pH_exc_UR = p1"
    "p46 = p2"
    "p45 = p1"
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    "pHC_inversion = p2"
    "eHC_excitation = p1*2/PI"
    "pHC_refocussing = p2"
    "eHC_exc_UR = p1*2/PI"
    "eHC_fb_UR = p1*2/PI"
    "d56 = 0"
    "p55 = p1"
    "p56 = p2"
    "pH_inversion = p2"
    "dH_inversion = p2"
    "dH_inversion_raw = p2"
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      "eH_WATERGATE = p2"
      "eHC_WATERGATE = p2"
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define delay dC_inversion
define delay dC_universal

define pulse pC_refocussing
define pulse pC_inversion
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define pulse eC_excitation
define pulse eC_flipback
define pulse eC_universal

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    "pC_refocussing = p4"
    "pC_inversion = p4"

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    "dC_inversion = p41"
    "dC_universal = p3"
    "eC_excitation = p3*2/PI"
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    "spoff7 = bf2*((cnst22 - cnst21)/1000000)"


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    "spoff5 = bf2*((cnst21 - cnst22)/1000000)"
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define pulse pN_inversion
define pulse pN_refocussing

define delay dN_inversion
define delay dN_universal
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define pulse eN_excitation

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     "dN_universal = p21"
     "dN_inversion = p22"
     "pN_inversion = p22"
     "pN_refocussing = p22"
     "eN_excitation = p21*2/PI"
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;cnst2: offset N + NH (with prolines), 127/60 ppm.
;cnst3: offset NH (without prolines), 117/40 ppm.

;cnst8: HM bandwidth, 2.5 ppm.
;cnst9: offset Hmet, 0.9/2.5 ppm.

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;cnst10: H gradient multiplier for encoding on N [0.10125].
;cnst11: H gradient multiplier for encoding on C [0.25125].


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;cnst20: offset C, 93/186 ppm.
;cnst21: offset CA, 55/35 ppm.
;cnst22: offset CO, 176.5/16 ppm.
"cnst23 = (cnst22 + cnst21)/2"    ; Middle between CA and CO.
;cnst24: offset Cali, 40/80 ppm.
;cnst25: offset CB (includes CA), 44/65 ppm.
;cnst26: offset CBaro, 35/25 ppm.
;cnst27: offset CACBaro, 45/45 ppm.
;cnst28: offset Caro, 125/45 ppm.
;cnst29: offset Caro (without CG), 127/40 ppm.
"cnst30 = (cnst26 + cnst28)/2"  ; Middle between CB and CG(aro).

;cnst41: offset HN, 8.5/7 ppm.
;cnst42: offset HAHB, 3.5/7 ppm.
;cnst43: offset HCali, 3/8 ppm.
;cnst44: offset HCaro, 7/3 ppm.

;cnst51: HN bandwidth, 7 ppm.
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;cnst61: distal H offset for TPPI shifting of an indirect dimension [ppm].
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; 1-10 free
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;gp31 reserved for rdgradient

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define list<gradient> EA2=<EA2>

;gpnam0: SMSQ10.100
;gpnam1: SMSQ10.100

;gpz0: Prefocussing gradient.
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; Manual set decoupling power:

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  "plw16 = plw3*(p21*p21)/(pcpd3*pcpd3)"  ; Recalculate power for classic N decoupling.


"plw12 = plw2*(p3*p3)/(pcpd2*pcpd2)"  ; Recalculate power for classic C decoupling.
"p51 = 10*p1"
"p52 = 10*p3"
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"p61 = 10*p1"
"p62 = 10*p3"
"p63 = 10*p21"

"spw51 = plw1"
"spw52 = plw2"

"spw61 = plw1"
"spw62 = plw2"
"spw63 = plw3"
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;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p21 : f3 channel - 90 degree high power pulse
;p22 : f3 channel - 180 degree high power pulse

;pl1: power for 1H  pulses
;pl2: power for 13C pulses
;pl3: power for 15N pulses
;pl4: power for 2H pulses

define pulse pGRAD
"pGRAD = p16"
define delay dGRAD
"dGRAD = d16"
define pulse pGProximalL
"pGProximalL = p17"
define delay dGProximalL
"dGProximalL = d17"
define pulse pGProximalS
"pGProximalS = p18"
define delay dGProximalS
"dGProximalS = d18"
define pulse pGDistalL
"pGDistalL = p19"
define delay dGDistalL
"dGDistalL = d19"
define pulse pGDistalS
"pGDistalS = p20"
define delay dGDistalS
"dGDistalS = d20"
;p16: crusher/prefocussing gradient pulse.
;p17: Proximal long gradient pulse.
;p18: Proximal short gradient pulse.
;p19: Distal long gradient pulse.
;p20: Distal short gradient pulse.
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;d16: Crusher/prefocussing gradient delay.
;d17: Proximal long gradient delay.
;d18: Proximal short gradient delay.
;d19: Distal long gradient delay.
;d20: Distal short gradient delay.

; Water flipback and flipdown pulses:

;p48: H2O flipback pulse
;p49: H2O flipdown pulse
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;sp48: H2O flipback pulse
;sp49: H2O flipdown pulse

;p50:
;p51: f1 channel, broadband refocussing pulse [BURBOP 20-200-900]
;p52: f2 channel, broadband refocussing pulse [BURBOP 20-200-900]

;p61: f1 channel, broadband refocussing pulse [G5]
;p62: f2 channel, broadband refocussing pulse [G5]
;p63: f3 channel, broadband refocussing pulse [G5]
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;sp50:
;sp51: f1 channel, broadband refocussing pulse [BURBOP 20-200-900]
;sp52: f2 channel, broadband refocussing pulse [BURBOP 20-200-900]
;sp53: f3 channel, broadband refocussing pulse [BURBOP 20-200-900]
;sp61: f1 channel, broadband refocussing pulse [G5]
;sp62: f2 channel, broadband refocussing pulse [G5]
;sp63: f3 channel, broadband refocussing pulse [G5]

; Descriptions of parameters read from prosol:

;p1: f1 channel -  90 degree high power pulse.
;p2: f1 channel - 180 degree high power pulse.
;p3: f2 channel -  90 degree high power pulse.
;p4: f2 channel - 180 degree high power pulse.
;p9: f2 channel - TOCSY mixing 90 degree pulselength.
;p11: f1 channel -  90 degree shaped pulse.
;p13: f2 channel -  90 Q5 Cali/CO.
;p14: f2 channel - 180 Q3 Cali/CO.
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;p16: homospoil/gradient pulse  [1 ms]
;p17: f1 channel - trim pulse [2.5 ms]

;p21: f3 channel -  90 degree high power pulse.
;p22: f3 channel - 180 degree high power pulse.

;p32
;p34
;p36
;p37
;p38
;p53
;p54
;p58
;p59
;plw37-63
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;p53: f4 channel - 90 degree high power pulse.

;pcpd1: f1 channel - 90 degree pulse for decoupling sequence.
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence.
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence.
;pcpd4: f4 channel - 90 degree pulse for decoupling sequence.
;pcpd5: f5 channel - 90 degree pulse for decoupling sequence.

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;pl1: power for 1H  pulses.
;pl2: power for 13C pulses.
;pl3: power for 15N pulses.
;pl4: power for 2H pulses.


;pl10: f1 channel - trim pulse, 25 us equivalent maximum!
;pl12: f2 channel - power level for CPD/BB decoupling.
;pl16: f3 channel - power level for CPD/BB decoupling.
;pl32: f1 channel - power level for H presat, 80 us equivalent maximum!
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;cpd1: decoupling according to sequence defined by cpdprg1.
;cpd2: decoupling according to sequence defined by cpdprg2.
;cpd3: decoupling according to sequence defined by cpdprg3.
;cpd4: decoupling according to sequence defined by cpdprg4.
;cpd5: decoupling according to sequence defined by cpdprg5.


; Shaped pulses: sp1-sp42 set by Prosol.
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;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance).
;sp2: f2 channel, 90 Q5 Cali/CO on resonance.
;sp3: f2 channel, 180 Q3 Cali/CO on resonance.
;sp5: f2 channel, 180 Q3 Cali off resonance.
;sp6: f2 channel, 90 Q5 Cali/CO off resonance time reversed.
;sp7: f2 channel, 180 Q3 CO with off resonance.
;sp8: f2 channel, 90 Q5 Cali/CO on resonance time reversed.
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;d1: relaxation delay    [1.2 s]
;d0: effective relaxation delay
;d3: delay for RD gradient recovery [2 us]

;d9: C TOCSY mixing time [20 ms]
;d11: delay for disk I/O    [30 ms]
;d13: short delay  [4 usec]
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;d16
;...gradients
;d20

;d21: time for H -> N evolution [5.4 ms]
;d22: time for N -> H evolution [5.4 ms]
;d23: time for simultaneous H -> N and N -> H evolution [5.4 ms]
;d24: time for H -> C evolution [3.5 ms]
;d25: time for C -> H(1/2/3) evolution, prefers CH, 1/(3JCH) [2.6 ms]
;d26: time for C -> H(1/2/3) evolution, prefers CH2, 1/(4JCH) [1.8 ms]
;d27: time for C -> H(1/2/3) evolution, prefers CH3, 1/(5JCH) [1.4 ms]
;d28: time for H -> Caro evolution [3.2 ms]
;d29: time for Caro -> H evolution [3.2 ms]
;d30: time for N -> CO evolution [28 ms]
;d31: time for N -> CA evolution [28 ms]
;d32: time for CO -> CA evolution [9.1 ms]
;d33: time for CA -> CO evolution compensated for relaxation [6.3 ms to 9.1 ms]
;d34: time for CA -> CO evolution in constant time [9.1 ms]
;d35: 2*time for CA -> CACB evolution or CA constant time evolution [28.6 ms]
;d36: time for NCA -> CAN' evolution [28.6 ms or 54 ms]
;d37: time for CA -> CACB and CB -> CBCA partial evolution 1/(4JCACB) [7.1 ms]
;d38: time for CO -> N evolution [28 ms]
;d39: time for N -> CO and N -> CA evolution [28 ms]
;d40: time for N -> NCAiCAi-1 evolution [50 ms]
;d41: time for Hm -> Cm evolution [4 ms]
;d42: time for Ha -> C evolution in C-BIRD (1/2J) [3.5 ms]

;d46: symmetrizing delay for HC_refocussing.
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;d50: time for C(ali)C(ali) FLOPSY16 mixing [20 ms]
;d51: time for C(aro)C(aro) FLOPSY16 mixing [20 ms]

;d56: symmetrizing delay for H_refocussing.
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;#   define RDGRAD(d) d
;#   define RDGRAD_NEG(d) d


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; Use gradients by default:


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define delay timeHX
define delay timeXH
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  "timeHX = d21"
  "timeXH = d22"


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define pulse pY_inversion

define delay timeXY

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    "timeXY = d30"

    "pY_inversion = p14"
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define delay dX_inversion
define delay dX_universal

define pulse pHX_inversion
define pulse pHX_exc_UR
define pulse pHX_refocussing

define pulse eHX_refocussing
define pulse eHX_excitation
define pulse eHX_exc_UR
define pulse eHX_fb_UR
define pulse eX_excitation
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define pulse eHX_WATERGATE
define pulse pX_inversion
define pulse pX_refocussing

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    "dX_inversion = dN_inversion"
    "dX_universal = dN_universal"
    "pX_inversion = pN_inversion"
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    "eX_excitation = eN_excitation"
    "pX_refocussing = pN_refocussing"


define pulse pA_inversion
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    "pA_inversion = p14"
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    "eHX_WATERGATE = eH_WATERGATE"
    "pHX_refocussing = pH_refocussing"
    "pHX_inversion = pH_inversion"
    "pHX_exc_UR = pH_exc_UR"
    "eHX_excitation = eH_excitation"
    "eHX_refocussing = eH_refocussing"
    "eHX_exc_UR = eH_exc_UR"
    "eHX_fb_UR = eH_fb_UR"

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;cnst44: effective evolution multiplier for HC_excitation.
;cnst46: effective evolution multiplier for HC_refocussing.
;cnst47: effective evolution multiplier for HC_UR_exc.
;cnst48: effective evolution multiplier for HC_UR_fb.

;cnst54: effective evolution multiplier for C_excitation.
;cnst56: effective evolution multiplier for C_refocussing.
;cnst57: effective evolution multiplier for C_UR_exc.
;cnst58: effective evolution multiplier for C_UR_fb.
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

define delay TP
"TP = 0"
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
define delay dXH_SE1_1  ; First echo of the sensitivity enhanced transfer.
define delay dXH_SE1_2 ; First echo of the sensitivity enhanced transfer.
define delay dXH_SE2  ; Second echo of the sensitivity enhanced transfer.
define delay ECHOTIME1  ; Delay before the last H refocussing pulse.
define delay ECHOTIME2  ; Delay after the last H refocussing pulse.
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; Nietlispach's TROSY requires an extra flipback pulse to bring H2O back to z:


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    "dXH_SE1_1 = timeXH/2 - pGProximalS - dGProximalS - eHX_refocussing/2 - eHX_fb_UR"


; Compensate J evolution delays for gradients and evolution during pulses:
"dXH_SE1_2 = timeXH/2 - pGProximalS - dGProximalS - eHX_refocussing/2 - eHX_fb_UR"
"dXH_SE2 = timeXH/2 - pGProximalS - dGProximalS - eHX_refocussing/2 - eHX_exc_UR"
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; Delays in the gradient selection echo on H:
"ECHOTIME1 = WT_de"
"ECHOTIME2 = eHX_fb_UR"

; Mutually compensate delays in the last echo of a sensitivity enhanced sequence:
"if (ECHOTIME1 >= ECHOTIME2) {ECHOTIME1 -= ECHOTIME2; ECHOTIME2 = 0;}"
"if (ECHOTIME2 > ECHOTIME1) {ECHOTIME2 -= ECHOTIME1; ECHOTIME1 = 0;}"

; *****************************************************************************
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;# ifdef PROXIMAL_NO_GRAD
;#   define PROXIMAL_T1_GRAD1
;#   define PROXIMAL_T1_GRAD2
;#   define PROXIMAL_XY_G
;    "pGProximalS = 0"
;    "dGProximalS = 0"
;# elif defined(PROXIMAL_GS)
;#   define PROXIMAL_T1_GRAD1 D_SHORT_GRADIENT(gp19)
;#   define PROXIMAL_T1_GRAD2 D_SHORT_GRADIENT(gp20)

;# elif !defined(PROXIMAL_EVOLVED)
;#   define PROXIMAL_T1_GRAD1 D_LONG_GRADIENT(gp11)
;#   define PROXIMAL_T1_GRAD2 D_LONG_GRADIENT(gp11)
;#   define (pGRAD:gp17*EA dGRAD TPaGRAD):f3 (0u):f1
;# else
;#   define PROXIMAL_T1_GRAD1 D_SHORT_GRADIENT(gp12)
;#   define PROXIMAL_T1_GRAD2 D_SHORT_GRADIENT(gp12)
;#   define (pGRAD:gp17*EA dGRAD TPaGRAD):f3 (0u):f1
;# endif

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; Timings for X echo:

define delay dXY

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    define delay dXYpre
    "dXYpre = pY_inversion"
    "dXY = timeXY - 2*pY_inversion - 2*eX_excitation"   ; Corrected for the inversion and its compensation.


define delay TPaY
define delay TPb
define delay TPc
define delay TPaA
define delay TPaGRAD
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"acqt0 = 0"
baseopt_echo

; *****************************************************************************
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define delay timeDHX
define delay timeDXH

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  "timeDHX = d21"
  "timeDXH = d22"

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define delay dDY_inversion
define delay timeDXY 


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    "timeDXY = d30"


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    "dDY_inversion = p14"
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

define delay dDX_inversion
define delay dDX_universal
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define pulse pDHX_refoc
define pulse pDX_refocussing

define pulse eDHX_excitation

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    "dDX_inversion = dN_inversion"
    "dDX_universal = dN_universal"
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    "pDX_refocussing = pN_refocussing"


define pulse pDA_inversion
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    "pDA_inversion = p14"
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
    "pDHX_refoc = pH_refocussing"
    "eDHX_excitation = eH_excitation"
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    "pGDistalS = 0"
    "dGDistalS = 0"
;# elif defined(DISTAL_GS)
;#   define  pGDistalS:gpDistalH dGDistalS
;#   define  pGDistalS:gpDistalH2 dGDistalS
;#   define (0u):f1 (T2aGRAD pGRAD:gpDistalX*EA dGRAD):f3
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; Timings:
; Compensate for the staggered X pulse in SCT evolution:
define delay dDHXpost
"dDHXpost = pX_inversion"

; Portion of J evolution time available for H evolution:
define delay dDHX

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    "dDHX = timeDHX - eH_refocussing - 2*eH_excitation - 2*pGDistalS - 2*dGDistalS"


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
; Timings for X echo:
define delay dDXY

    "dDXY = timeXY - 2*eX_excitation"
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define delay T1a
define delay T1b
define delay T1c
define delay T2aY
define delay T2aA

"T1a = 0"
"T1b = 0"
"T1c = 0"
"T2aA = 0"
"T2aY = 0"

; *****************************************************************************
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; dimension 3D; AQ_mode  (F2) Echo-Antiecho (F1) States-TPPI
define delay MCWRK
define delay MCREST
define delay T1orig
"T1orig=T1"
define delay TPorig
"TPorig=TP"
define loopcounter t2loop
"t2loop=0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ph2loop
"ph2loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 2)"
define loopcounter ST2CNT
"ST2CNT = trunc(td2 / 2)"
"MCREST = d11 - d11"
"MCWRK = 0.066667*d11"

    dccorr
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1 ze
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LBLAV, MCWRK
      "T1=T1orig + t1loop * in1 "
      "phval16 = (ph1loop % 4) * 90"
      MCWRK ip16 + phval16
      "TP=TPorig + t2loop * in2 "
      "phval13 = (ph2loop % 2) * 180"
      MCWRK ip13 + phval13
      "phval11 = (t2loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t2loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph2loop * 1"
      MCWRK setgrad EA
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2 MCWRK  * 7 do:f2  do:f3
LBLF2, MCWRK  * 7
LBLST2, MCWRK 
  MCREST
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; TODO: do:f3
; Calculate recycling delay including everything outside pulses and acquisition time.

; Reset relaxation delay:
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    "d0 = d1"   ; Reset relaxation delay.


"d0 -= d11 + 4u"    ; Account for d11 file write delay and 4u delay for setnmr3|0 setnmr0|34|32|33 ctrlgrad 0.
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  d0    ; Relaxation delay.

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  4u do:f1 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
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
; Extra gradient delay:  

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
; Runtime calculations:

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    "TPaY = (dXY + TP)/2"
    "if (TPmax > dXY) {TPb = TP*(1 - dXY/TPmax)/2;} else {TPb = 0;}"
    "if (TPmax > dXY) {TPc = dXY*(1 - TP/TPmax)/2;} else {TPc = dXY/2 - TP/2;}"
    "TPaA = TP/2"

; Gradient interchanges with first inversion pulse:
  "if (TPaA < (pGRAD + dGRAD)) {TPaGRAD = TP/2 + pA_inversion;} else {TPaGRAD = 0;}"

; *****************************************************************************
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
; Run-time calculations:
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; *****************************************************************************
;# elif defined(WT_PULSES) && !defined(IMPORT_PHASES)
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; Hz -> HzXz:


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  (p1 ph0 pl1):f1

    
    dDHX*0.5
    (center (p2 ph0 pl1):f1 (p22 ph0 pl3):f3)
    dDHX*0.5
    
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  (p1 ph21 pl1):f1

    (p11:sp1 ph2+ph21):f1
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  4u fq=cnst22(bf ppm):f2
  pGDistalL:gp23 dGDistalL

; 2HzXz -> 2XzYz:
  (p21 ph23 pl3):f3
  (lalign
    (dDXY*0.5):f2
    (timeHX p1 ph1 pl1 0.1u pl19 ph0 cpds1):f1
    (0u):f1
    
  )
  0u

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    (center (p14:sp3 ph0):f2  (p22 ph0 pl3):f3)


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  dDXY*0.5
  (p21 ph24 pl3):f3


  (p1 ph3 do pl1):f1  ; H decoupling off and flipback.
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  pGDistalL:gp24 dGDistalL


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; *****************************************************************************
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
; COzNz CO evolution (T1):
  (p13:sp2 ph16):f2
  T1*0.5
  (center (p14:sp7 ph0):f2 (p22 ph0 pl3):f3)
  T1*0.5
  (p14:sp3 ph0):f2
  (p14:sp7 ph0):f2
  (p13:sp8 ph0):f2

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
  4u fq=cnst22(bf ppm):f2

    (p1 ph1 pl1 0.1u pl19 ph0 cpds1):f1 ; H excitation and decoupling on.
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; 2XzYz -> H with evolution (TP):
    (p21 ph11+ph12 pl3):f3
    dXYpre
    TPc
    (p22 ph0 pl3):f3
    TPb
    (ralign
        (p1 ph3 do pl1 timeHX):f1
        (p14:sp3 ph0 TPaY):f2
        (p14:sp7 ph0 TPaA):f2
        (pGRAD:gp17*EA dGRAD TPaGRAD):f3
    )
    

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
; phProximalState - last X pulse of the TRANSFER block determines selection of X spin state:
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    (ralign (p1 ph0 pl1):f1 (p21 ph13 pl3):f3)
    
    pGProximalS:gp12 dGProximalS
    dXH_SE1_1
    (center (p2 ph0 pl1):f1 (p22 ph0 pl3):f3)
    dXH_SE1_2
    pGProximalS:gp12 dGProximalS
    (lalign (p1 ph1 pl1):f1 (p21 ph1 pl3):f3)
    pGProximalS:gp13 dGProximalS
    dXH_SE2
    (center (p2 ph0 pl1):f1 (p22 ph0 pl3):f3)
    dXH_SE2
    pGProximalS:gp13 dGProximalS
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      (ralign (p1 ph0 pl1):f1 (dX_universal):f3)

  pGRAD:gp19
  dGRAD
  ECHOTIME1
  (p2 ph0 pl1):f1
  ECHOTIME2
  pGRAD:gp20
  dGRAD pl16:f3 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7

; *****************************************************************************
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    go=2 ph31 cpds3:f3 finally do:f3
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  MCWRK  wr #0 if #0 zd 

  "ph2loop+=1"
      "T1=T1orig + t1loop * in1 "
      "phval16 = (ph1loop % 4) * 90"
      MCWRK ip16 + phval16
      "TP=TPorig + t2loop * in2 "
      "phval13 = (ph2loop % 2) * 180"
      MCWRK ip13 + phval13
      "phval11 = (t2loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t2loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph2loop * 1"
      MCWRK setgrad EA
  lo to LBLF2 times 2
  MCWRK 

  "t2loop+=1"
      "T1=T1orig + t1loop * in1 "
      "phval16 = (ph1loop % 4) * 90"
      MCWRK ip16 + phval16
      "TP=TPorig + t2loop * in2 "
      "phval13 = (ph2loop % 2) * 180"
      MCWRK ip13 + phval13
      "phval11 = (t2loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t2loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph2loop * 1"
      MCWRK setgrad EA
  lo to LBLST2 times ST2CNT
  MCWRK 
  "t2loop=0"
  "ph2loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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exit


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ph0 = 0
ph1 = 1
ph2 = 2
ph3 = 3

ph30 = 0

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
; H flipback:
ph21 = 1

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; X excitation:
ph23 = 0 2

; X flipback:
;# if (2 == 1) || (2 == 3); Doesn't work!

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    ph24 = 0 ; Even number of evolved XY J couplings.


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;for z-only gradients:
;gpz21: DHX: gradient in Hz -> 2HzXz echo (no evolution): 1%.
;gpz22: DHX: short gradient in Hz -> 2HzXz echo (no evolution): 2.7%.
;gpz23: DHX: gradient after Hz -> 2HzXz echo: 3%.
;gpz24: DHX: gradient after 2XzHz -> 2XzYz echo: 5%.

;use gradient files:
;gpnam21: SMSQ10.100
;gpnam22: SMSQ10.100
;gpnam23: SMSQ10.100
;gpnam24: SMSQ10.100

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; E/A selecting phase:


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    ph13 = 2


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;gpz12: Gradient in first COS-INEPT echo: 5%.
;gpz13: Gradient in second COS-INEPT echo: 2%.

;gpnam12: SMSQ10.100
;gpnam13: SMSQ10.100

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; X excitation:
;# if (2 == 1) ; Doesn't work!


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    ph11 = 0 ; Even number of evolved XY J couplings.


; X excitation:
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    ph12 = 1 1 3 3


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;gpz17: First coherence selection gradient (on N/C): 80%.

;gpz19: Second coherence selection gradient (on H): 1%.
;gpz20: Third coherence selection gradient (on H): 9.1%.

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
ph16 = 0 0 0 0 2 2 2 2

; Receiver phase:
ph31 = ph12 + ph23 + ph16
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;gpz27: gradient after NOESY: -7%.
;gpnam27: SMSQ10.100
