# 1 "/opt/wtopspin/gorka/2D/pp/WT/seq/NOESY/4D_NOESY.wt.pp"
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prosol relations=<wt>


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;cnst0: Correct to phc1=0 by entering cnst0=phc1. Added to last delay.
define delay WT_de


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    "WT_de = de - 2*dw*cnst0/360"


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
; Adjust d1 for sequence to match requested d1 relaxation time:
"d1 -= 0"   ; Prevents spurious error message from the next line.
"d1 -= d11"

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; ASAP turned off for now:


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
; H decoupling with flanking pulses, ignored in case of TROSY:
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; H or D decoupling with flanking pulses:
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;ns: 1 * n
;ds: >= 16
;td1: number of experiments

;cpd1: decoupling according to sequence defined by cpdprg1, DIPSI2
;cpd2: decoupling according to sequence defined by cpdprg2

;cpd4: decoupling according to sequence defined by cpdprg4, waltz16
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;pcpd2: f2 channel - 90 degree pulse for decoupling sequence

;gpz0: prefocussing gradient.
;gpnam0: SMSQ10.100

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define delay dH_inversion
define delay dH_inversion_raw
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define delay dHC_inversion
define delay dHC_inversion_raw

define pulse pH_excitation
define pulse pHC_excitation
define pulse pH_exc_UR
define pulse pHC_exc_UR
define pulse pH_refocussing
define pulse pHC_refocussing
define pulse pH_inversion
define pulse pHC_inversion
define pulse eH_excitation
define pulse eHC_excitation
define pulse eH_refocussing
define pulse eHC_refocussing
define pulse eH_exc_UR
define pulse eHC_exc_UR
define pulse eH_fb_UR
define pulse eHC_fb_UR
define pulse eH_WATERGATE
define pulse eHC_WATERGATE

define pulse pH2O_exc_Z
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
; H pulses act on > 4.7 and HC pulses on 4.7 > with H2O unaffected.

define pulse pH2O_excitation
define pulse pH2O_flipback
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    "pH2O_excitation = 0u"
    "pH2O_flipback = 0u"
    "pH2O_exc_Z = 0u"

    "p11 = 0u"

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    "pH_inversion = p2"

    "d46 = 0"
    "eH_excitation = p1*2/PI"
    "eH_refocussing = 0"
    "eH_exc_UR = p1*2/PI"
    "eH_fb_UR = p1*2/PI"
    "pH_refocussing = p2"
    "pH_exc_UR = p1"
    "p46 = p2"
    "p45 = p1"

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    "pHC_inversion = p2"
    "eHC_excitation = p1*2/PI"
    "pHC_refocussing = p2"
    "eHC_exc_UR = p1*2/PI"
    "eHC_fb_UR = p1*2/PI"
    "d56 = 0"
    "p55 = p1"
    "p56 = p2"
    "pH_inversion = p2"
    "dH_inversion = p2"
    "dH_inversion_raw = p2"
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      "eH_WATERGATE = p2"
      "eHC_WATERGATE = p2"
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define delay dC_inversion
define delay dC_universal

define pulse pC_refocussing
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define pulse eC_excitation
define pulse eC_flipback
define pulse eC_universal

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    "pC_refocussing = p4"

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    "dC_inversion = p41"
    "dC_universal = p3"
    "eC_excitation = p3*2/PI"
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define delay dN_inversion
define delay dN_universal

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     "dN_universal = p21"
     "dN_inversion = p22"
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; 1-10 free
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;gp31 reserved for rdgradient

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define list<gradient> EA2=<EA2>

;gpnam0: SMSQ10.100
;gpnam1: SMSQ10.100

;gpz0: Prefocussing gradient.
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; Manual set decoupling power:

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  "plw16 = plw3*(p21*p21)/(pcpd3*pcpd3)"  ; Recalculate power for classic N decoupling.


"plw12 = plw2*(p3*p3)/(pcpd2*pcpd2)"  ; Recalculate power for classic C decoupling.
"p51 = 10*p1"
"p52 = 10*p3"
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"p61 = 10*p1"
"p62 = 10*p3"
"p63 = 10*p21"

"spw51 = plw1"
"spw52 = plw2"

"spw61 = plw1"
"spw62 = plw2"
"spw63 = plw3"
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;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p21 : f3 channel - 90 degree high power pulse
;p22 : f3 channel - 180 degree high power pulse

;pl1: power for 1H  pulses
;pl2: power for 13C pulses
;pl3: power for 15N pulses
;pl4: power for 2H pulses

define pulse pGRAD
"pGRAD = p16"
define delay dGRAD
"dGRAD = d16"
define pulse pGProximalL
"pGProximalL = p17"
define delay dGProximalL
"dGProximalL = d17"
define pulse pGProximalS
"pGProximalS = p18"
define delay dGProximalS
"dGProximalS = d18"
define pulse pGDistalL
"pGDistalL = p19"
define delay dGDistalL
"dGDistalL = d19"
define pulse pGDistalS
"pGDistalS = p20"
define delay dGDistalS
"dGDistalS = d20"
;p16: crusher/prefocussing gradient pulse.
;p17: Proximal long gradient pulse.
;p18: Proximal short gradient pulse.
;p19: Distal long gradient pulse.
;p20: Distal short gradient pulse.
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;d16: Crusher/prefocussing gradient delay.
;d17: Proximal long gradient delay.
;d18: Proximal short gradient delay.
;d19: Distal long gradient delay.
;d20: Distal short gradient delay.

; Water flipback and flipdown pulses:

;p48: H2O flipback pulse
;p49: H2O flipdown pulse
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;sp48: H2O flipback pulse
;sp49: H2O flipdown pulse

;p50:
;p51: f1 channel, broadband refocussing pulse [BURBOP 20-200-900]
;p52: f2 channel, broadband refocussing pulse [BURBOP 20-200-900]

;p61: f1 channel, broadband refocussing pulse [G5]
;p62: f2 channel, broadband refocussing pulse [G5]
;p63: f3 channel, broadband refocussing pulse [G5]
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;sp50:
;sp51: f1 channel, broadband refocussing pulse [BURBOP 20-200-900]
;sp52: f2 channel, broadband refocussing pulse [BURBOP 20-200-900]
;sp53: f3 channel, broadband refocussing pulse [BURBOP 20-200-900]
;sp61: f1 channel, broadband refocussing pulse [G5]
;sp62: f2 channel, broadband refocussing pulse [G5]
;sp63: f3 channel, broadband refocussing pulse [G5]

; Descriptions of parameters read from prosol:

;p1: f1 channel -  90 degree high power pulse.
;p2: f1 channel - 180 degree high power pulse.
;p3: f2 channel -  90 degree high power pulse.
;p4: f2 channel - 180 degree high power pulse.
;p9: f2 channel - TOCSY mixing 90 degree pulselength.
;p11: f1 channel -  90 degree shaped pulse.
;p13: f2 channel -  90 Q5 Cali/CO.
;p14: f2 channel - 180 Q3 Cali/CO.
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;p16: homospoil/gradient pulse  [1 ms]
;p17: f1 channel - trim pulse [2.5 ms]

;p21: f3 channel -  90 degree high power pulse.
;p22: f3 channel - 180 degree high power pulse.

;p32
;p34
;p36
;p37
;p38
;p53
;p54
;p58
;p59
;plw37-63
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;p53: f4 channel - 90 degree high power pulse.

;pcpd1: f1 channel - 90 degree pulse for decoupling sequence.
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence.
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence.
;pcpd4: f4 channel - 90 degree pulse for decoupling sequence.
;pcpd5: f5 channel - 90 degree pulse for decoupling sequence.

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;pl1: power for 1H  pulses.
;pl2: power for 13C pulses.
;pl3: power for 15N pulses.
;pl4: power for 2H pulses.


;pl10: f1 channel - trim pulse, 25 us equivalent maximum!
;pl12: f2 channel - power level for CPD/BB decoupling.
;pl16: f3 channel - power level for CPD/BB decoupling.
;pl32: f1 channel - power level for H presat, 80 us equivalent maximum!
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;cpd1: decoupling according to sequence defined by cpdprg1.
;cpd2: decoupling according to sequence defined by cpdprg2.
;cpd3: decoupling according to sequence defined by cpdprg3.
;cpd4: decoupling according to sequence defined by cpdprg4.
;cpd5: decoupling according to sequence defined by cpdprg5.


; Shaped pulses: sp1-sp42 set by Prosol.
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;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance).
;sp2: f2 channel, 90 Q5 Cali/CO on resonance.
;sp3: f2 channel, 180 Q3 Cali/CO on resonance.
;sp5: f2 channel, 180 Q3 Cali off resonance.
;sp6: f2 channel, 90 Q5 Cali/CO off resonance time reversed.
;sp7: f2 channel, 180 Q3 CO with off resonance.
;sp8: f2 channel, 90 Q5 Cali/CO on resonance time reversed.
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;d1: relaxation delay    [1.2 s]
;d0: effective relaxation delay
;d3: delay for RD gradient recovery [2 us]

;d9: C TOCSY mixing time [20 ms]
;d11: delay for disk I/O    [30 ms]
;d13: short delay  [4 usec]
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;d16
;...gradients
;d20

;d21: time for H -> N evolution [5.4 ms]
;d22: time for N -> H evolution [5.4 ms]
;d23: time for simultaneous H -> N and N -> H evolution [5.4 ms]
;d24: time for H -> C evolution [3.5 ms]
;d25: time for C -> H(1/2/3) evolution, prefers CH, 1/(3JCH) [2.6 ms]
;d26: time for C -> H(1/2/3) evolution, prefers CH2, 1/(4JCH) [1.8 ms]
;d27: time for C -> H(1/2/3) evolution, prefers CH3, 1/(5JCH) [1.4 ms]
;d28: time for H -> Caro evolution [3.2 ms]
;d29: time for Caro -> H evolution [3.2 ms]
;d30: time for N -> CO evolution [28 ms]
;d31: time for N -> CA evolution [28 ms]
;d32: time for CO -> CA evolution [9.1 ms]
;d33: time for CA -> CO evolution compensated for relaxation [6.3 ms to 9.1 ms]
;d34: time for CA -> CO evolution in constant time [9.1 ms]
;d35: 2*time for CA -> CACB evolution or CA constant time evolution [28.6 ms]
;d36: time for NCA -> CAN' evolution [28.6 ms or 54 ms]
;d37: time for CA -> CACB and CB -> CBCA partial evolution 1/(4JCACB) [7.1 ms]
;d38: time for CO -> N evolution [28 ms]
;d39: time for N -> CO and N -> CA evolution [28 ms]
;d40: time for N -> NCAiCAi-1 evolution [50 ms]
;d41: time for Hm -> Cm evolution [4 ms]
;d42: time for Ha -> C evolution in C-BIRD (1/2J) [3.5 ms]

;d46: symmetrizing delay for HC_refocussing.
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;d50: time for C(ali)C(ali) FLOPSY16 mixing [20 ms]
;d51: time for C(aro)C(aro) FLOPSY16 mixing [20 ms]

;d56: symmetrizing delay for H_refocussing.
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;#   define RDGRAD(d) d
;#   define RDGRAD_NEG(d) d


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"in1 = inf1"
"in2 = inf2"
"in3 = inf3"

define delay mixTime
;d10: NOESY mixing time [40-400 ms]
"mixTime = d10 - pGRAD - dGRAD" ; Corrected for gradient.
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define delay timeDHX
define delay timeDXH

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  "timeDHX = d24"
  "timeDXH = d25"

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define delay dDX_inversion
define delay dDX_universal

define pulse pDHX_refoc
define pulse pDX_refocussing

define pulse eDHX_excitation
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    "dDX_inversion = dC_inversion"
    "dDX_universal = dC_universal"


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    "pDX_refocussing = pC_refocussing"
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
define delay dDY_inversion
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    "dDY_inversion = 0"


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    "pDHX_refoc = pHC_refocussing"
    "eDHX_excitation = eHC_excitation"
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define delay T1
"T1 = 0"
define delay T2
"T2 = 0"
define delay T1max
"T1max = max(in1*(td1/2 - 1), 0)"


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; Set up delays:

define delay T1a
define delay T1b
define delay T1c

"T1a = 0"
"T1b = 0"
"T1c = 0"
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define delay deltaDHpre  ; Correction for H chemical shift evolution due to pulses in outer echo.
define delay deltaDHpost

"deltaDHpre = pDHX_refoc"

define delay deltaDX  ; Correction for gradient and pulses in T1.
"deltaDX = pDHX_refoc"
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"deltaDHpost = 2*eDHX_excitation"

define delay dDHX    ; Delay for HX J coupling back-evolution (single H only).
"dDHX = timeDHX - 2*eDHX_excitation"   ; Two pulses and the delay compensating for the evolution.

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; Use gradients by default:


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define delay timeHX
define delay timeXH
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  "timeHX = d24"
  "timeXH = d25"


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define delay dX_inversion
define delay dX_universal
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define pulse pHX_inversion
define pulse pHX_exc_UR
define pulse pHX_refocussing

define pulse eHX_refocussing
define pulse eHX_excitation
define pulse eHX_exc_UR
define pulse eHX_fb_UR

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define pulse eHX_WATERGATE


    "dX_inversion = dC_inversion"
    "dX_universal = dC_universal"
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

define pulse pY_inversion
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    "pY_inversion = 0"


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    "eHX_WATERGATE = eHC_WATERGATE"
    "pHX_refocussing = pHC_refocussing"
    "pHX_inversion = pHC_inversion"
    "pHX_exc_UR = pHC_exc_UR"
    "eHX_excitation = eHC_excitation"
    "eHX_refocussing = eHC_refocussing"
    "eHX_exc_UR = eHC_exc_UR"
    "eHX_fb_UR = eHC_fb_UR"
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
;cnst44: effective evolution multiplier for HC_excitation.
;cnst46: effective evolution multiplier for HC_refocussing.
;cnst47: effective evolution multiplier for HC_UR_exc.
;cnst48: effective evolution multiplier for HC_UR_fb.

;cnst54: effective evolution multiplier for C_excitation.
;cnst56: effective evolution multiplier for C_refocussing.
;cnst57: effective evolution multiplier for C_UR_exc.
;cnst58: effective evolution multiplier for C_UR_fb.
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

; Set up chemical shift evolution times:
define delay TProximal
"TProximal = 0"
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;define delay TproximalPre
define delay TproximalPost
define delay dHX  ; H echo.
define delay dHX2_1  ; Second H echo - before acquisition.
define delay dHX2_2  ; Second H echo - before acquisition.

; Compensate J evolution delays for gradients and evolution during pulses:
"dHX = timeHX/2 - pGProximalS - dGProximalS - eHX_WATERGATE/2 - eHX_excitation"
"dHX2_1 = timeHX/2 - pGRAD - dGRAD - eHX_WATERGATE/2 - eHX_excitation"
"dHX2_2 = timeHX/2 - pGRAD - dGRAD - eHX_WATERGATE/2 - WT_de"

; Compensate for inversion pulses during X SQ evolution:
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    "TproximalPost = larger(pHX_inversion, pY_inversion)"


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
; Phase of last H excitation pulse:

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"acqt0 = 0"
baseopt_echo
; *****************************************************************************
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; dimension 4D; AQ_mode  (F3) Echo-Antiecho (F2) States-TPPI (F1) States-TPPI
define delay MCWRK
define delay MCREST
define delay T1orig
"T1orig=T1"
define delay T2orig
"T2orig=T2"
define delay TProximalorig
"TProximalorig=TProximal"
define loopcounter t3loop
"t3loop=0"
define loopcounter t2loop
"t2loop=0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ph2loop
"ph2loop=0"
define loopcounter ph3loop
"ph3loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 2)"
define loopcounter ST2CNT
"ST2CNT = trunc(td2 / 2)"
define loopcounter ST3CNT
"ST3CNT = trunc(td3 / 2)"
"MCREST = d11 - d11"
"MCWRK = 0.022222*d11"

    dccorr
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1 ze
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LBLAV, MCWRK
      "T1=T1orig + t1loop * in1 "
      "phval21 = (ph1loop % 4) * 90"
      MCWRK ip21 + phval21
      "T2=T2orig + t2loop * in2 "
      "phval23 = (ph2loop % 4) * -90"
      MCWRK ip23 + phval23
      "TProximal=TProximalorig + t3loop * in3 "
      "phval11 = (t3loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t3loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph3loop * 1"
      MCWRK setgrad EA
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2 MCWRK  * 7 do:f2  do:f3
LBLF3, MCWRK  * 7
LBLST3, MCWRK  * 8
LBLF2, MCWRK  * 7
LBLST2, MCWRK  * 8
LBLF1, MCWRK  * 7
LBLST1, MCWRK pl32:f1 cw:f1 
  MCREST
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; TODO: do:f2
; Calculate recycling delay including everything outside pulses and acquisition time.

; Reset relaxation delay:
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    "d0 = d1"   ; Reset relaxation delay.


"d0 -= d11 + 4u"    ; Account for d11 file write delay and 4u delay for setnmr3|0 setnmr0|34|32|33 ctrlgrad 0.
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  d0    ; Relaxation delay.

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  4u do:f1 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
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
; Extra gradient delay:  

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
  "T1a = T1/2"
  "T1b = 0"
  "T1c = dDHX - T1/2"

; Hz -> HzCz
  
  (p1 ph21 pl1):f1
  deltaDHpre    ; Compensate for the delay deltaDX in X echo.
  T1a
  (center (p4 ph0 pl2):f2 (p2 ph0 pl1):f1) ; For hard pulses brings solvent to -z.
  T1c
  deltaDHpost   ; Compensate for evolution in excitation/flipback pulses.
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; HzCz real-time evolution of C:
  (p3 ph23 pl2):f2
  pGDistalS:gp22 dGDistalS
  deltaDX ; Compensate for DHX_refocussing.
  (p4 ph24 pl2):f2
  T2*0.5

  (p2 ph22 pl1):f1
  pGDistalS:gp22 dGDistalS

  T2*0.5
  (p3 ph25 pl2):f2
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; HzCz -> Ht:
  dDHX
  (p1 ph0 pl1):f1
  


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
; NOESY mixing:

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    mixTime


  pGRAD:gp27 dGRAD
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

; Hz -> HzXz:
  (p1 ph0 pl1):f1
  pGProximalS:gp11 dGProximalS
  dHX
  (center (p2 ph1 pl1):f1 (p41:sp41 ph0):f2)
  dHX
  pGProximalS:gp11 dGProximalS
  (p1 ph1 pl1):f1
  
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  p16:gp14 d16

; HzNz -> HzNy + HzNx with N evolution (T1):
  (p3 ph11 pl2):f2
  
  TProximal*0.5
  
  (center (p2 ph0 pl1):f1 (0u):f1)
  
  TProximal*0.5
  
;  TproximalPre
  pGRAD:gp17 dGRAD
  (p4 ph0 pl2):f2
  pGRAD:gp18 dGRAD
  
  TproximalPost
  (p3 ph13 pl2):f2

  p16:gp15 d16
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; HzXz -> Ht:
  
  (p1 ph3 pl1):f1
  pGRAD:gp19*EA dGRAD
  dHX2_1
  (center (p2 ph0 pl1):f1 (p4 ph0 pl2):f2)
  pGRAD:gp20*EA dGRAD
  dHX2_2 pl12:f2 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7

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; *****************************************************************************
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    go=2 ph31 cpds2:f2 finally do:f2
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  MCWRK  wr #0 if #0 zd 

  "ph3loop+=1"
      "T1=T1orig + t1loop * in1 "
      "phval21 = (ph1loop % 4) * 90"
      MCWRK ip21 + phval21
      "T2=T2orig + t2loop * in2 "
      "phval23 = (ph2loop % 4) * -90"
      MCWRK ip23 + phval23
      "TProximal=TProximalorig + t3loop * in3 "
      "phval11 = (t3loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t3loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph3loop * 1"
      MCWRK setgrad EA
  lo to LBLF3 times 2
  MCWRK 

  "t3loop+=1"
      "T1=T1orig + t1loop * in1 "
      "phval21 = (ph1loop % 4) * 90"
      MCWRK ip21 + phval21
      "T2=T2orig + t2loop * in2 "
      "phval23 = (ph2loop % 4) * -90"
      MCWRK ip23 + phval23
      "TProximal=TProximalorig + t3loop * in3 "
      "phval11 = (t3loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t3loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph3loop * 1"
      MCWRK setgrad EA
  lo to LBLST3 times ST3CNT
  MCWRK 
  "t3loop=0"
  "ph3loop=0"
  MCWRK 

  "ph2loop+=1"
      "T1=T1orig + t1loop * in1 "
      "phval21 = (ph1loop % 4) * 90"
      MCWRK ip21 + phval21
      "T2=T2orig + t2loop * in2 "
      "phval23 = (ph2loop % 4) * -90"
      MCWRK ip23 + phval23
      "TProximal=TProximalorig + t3loop * in3 "
      "phval11 = (t3loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t3loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph3loop * 1"
      MCWRK setgrad EA
  lo to LBLF2 times 2
  MCWRK 

  "t2loop+=1"
      "T1=T1orig + t1loop * in1 "
      "phval21 = (ph1loop % 4) * 90"
      MCWRK ip21 + phval21
      "T2=T2orig + t2loop * in2 "
      "phval23 = (ph2loop % 4) * -90"
      MCWRK ip23 + phval23
      "TProximal=TProximalorig + t3loop * in3 "
      "phval11 = (t3loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t3loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph3loop * 1"
      MCWRK setgrad EA
  lo to LBLST2 times ST2CNT
  MCWRK 
  "t2loop=0"
  "ph2loop=0"
  MCWRK 

  "ph1loop+=1"
      "T1=T1orig + t1loop * in1 "
      "phval21 = (ph1loop % 4) * 90"
      MCWRK ip21 + phval21
      "T2=T2orig + t2loop * in2 "
      "phval23 = (ph2loop % 4) * -90"
      MCWRK ip23 + phval23
      "TProximal=TProximalorig + t3loop * in3 "
      "phval11 = (t3loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t3loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph3loop * 1"
      MCWRK setgrad EA
  lo to LBLF1 times 2
  MCWRK 

  "t1loop+=1"
      "T1=T1orig + t1loop * in1 "
      "phval21 = (ph1loop % 4) * 90"
      MCWRK ip21 + phval21
      "T2=T2orig + t2loop * in2 "
      "phval23 = (ph2loop % 4) * -90"
      MCWRK ip23 + phval23
      "TProximal=TProximalorig + t3loop * in3 "
      "phval11 = (t3loop * 180)%360"
      MCWRK ip11 + phval11
      "phval31 = (t3loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph3loop * 1"
      MCWRK setgrad EA
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t1loop=0"
  "ph1loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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exit

ph0 = 0
ph1 = 1
ph2 = 2
ph3 = 3
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
ph21 = 2  ; H excitation.
ph22 = 0  ; H refocussing.

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ph23 = 0 2  ; X excitation.
ph24 = 0    ; X refocussing.


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    ph25 = 0 0 0 0 2 2 2 2 ; X flipback.


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;for z-only gradients:
;gpz21: Distal HMQC: gradient in the outer echo (H): 17%.
;gpz22: Distal HMQC: gradient in the inner (X and H) echo: 5%.
;gpz23: Distal HMQC: second gradient in the inner (X and H) echo: 5%.
;gpz24: Distal HMQC: second gradient in the outer (H) echo: 5%.

;use gradient files:
;gpnam21: SMSQ10.100
;gpnam22: SMSQ10.100
;gpnam23: SMSQ10.100
;gpnam24: SMSQ10.100
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
; X excitation:

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    ph11 = 0 0 2 2 


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; X flipback:


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    ph13 = 0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2


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;gpnam11: SMSQ10.100
;gpnam12: SMSQ10.100
;gpnam13: SMSQ10.100
;gpnam14: SMSQ10.100
;gpnam15: SMSQ10.100
;gpnam17: SMSQ10.100
;gpnam18: SMSQ10.100
;gpnam19: SMSQ10.100
;gpnam20: SMSQ10.100

;gpz11: Gradient in Hz -> HzXz echo: 1%.

;gpz12: Short gradient in X evolution echo: 5%.
;gpz13: Short gradient in HzXz -> Ht (WATERGATE) echo: 21%.
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;gpz14: Gradient after Hz -> HzXz echo: 3%.
;gpz15: Gradient after X evolution echo : 11%.

;gpz17: First coherence selection gradient (on N/C): 80%.
;gpz18: Second coherence selection gradient (on N/C): 0%.

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;gpz19: Third coherence selection gradient (on H): 1%.
;gpz20: Forth coherence selection gradient (on H): 21.1%.


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; Receiver phase:
ph31 = ph11 + ph13 + ph23 + ph25

;gpz27: gradient after NOESY: -7%.
;gpnam27: SMSQ10.100
